CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|F:\Broad_drive\projects\biosensor\temp\brightfield_projections
    Name of the file:metadata_000012106404__2020-07-10T22_11_13-Measurement_1_ffc_brightfield_A01.csv
    Load images based on this data?:Yes
    Base image location:None|/inbox/703__2018-11-07T20_55_16-Measurement_1/Images
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:fld,channel,parent,timepoint,well
    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:original
    Name the output image:IlluminationOriginal
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:135
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:original
    Name the output image:CorrectedBrightfield
    Select the illumination function:IlluminationOriginal
    Select how the illumination function is applied:Divide

MeasureImageIntensity:[module_num:4|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
    Select the image to measure:CorrectedBrightfield
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:5|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:ImageAfterSubtract
    Image or measurement?:Image
    Select the first image:CorrectedBrightfield
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_CorrectedBrightfield

ImageMath:[module_num:6|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:0.125
    Add to result:0.5
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterNormalization
    Image or measurement?:Image
    Select the first image:ImageAfterSubtract
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_StdIntensity_CorrectedBrightfield

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:ImageAfterNormalization
    Select method for constructing file names:Single name
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    Enter single file name:\g<parent>-\g<timepoint>-\g<well>-\g<fld>-\g<zst>-\g<channel>_flatfield_corrected
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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