CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:4
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/Users/mcsaba/Google Drive/projects/biosensor/temp/brightfield_projections
    Name of the file:metadata_000012106404__2020-07-10T22_11_13-Measurement_1_ffc_ch3_A01.csv
    Load images based on this data?:Yes
    Base image location:None|/inbox/703__2018-11-07T20_55_16-Measurement_1/Images
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:fld,channel,parent,timepoint,well
    Rescale intensities?:Yes

CorrectIlluminationCalculate:[module_num:2|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
    Select the input image:original
    Name the output image:IlluminationOriginal
    Select how the illumination function is calculated:Background
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    Block size:135
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:135
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:original
    Name the output image:CorrectedFluorescent
    Select the illumination function:IlluminationOriginal
    Select how the illumination function is applied:Subtract

SaveImages:[module_num:4|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
    Select the type of image to save:Image
    Select the image to save:CorrectedFluorescent
    Select method for constructing file names:Single name
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    Enter single file name:\g<parent>-\g<timepoint>-\g<well>-\g<fld>-\g<zst>-\g<channel>_flatfield_corrected
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    Saved file format:tiff
    Output file location:Default Output Folder|ff
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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